{
    "$id" : "dvrk-system.schema.json",
    "$version" : "1",
    "IOs" : 
    [
        {
            "name" : "io",
            "port" : "fw",
            //"protocol" : "broadcast-read-write",
            "protocol" : "sequential-read-broadcast-write",
	    "watchdog_timeout" : 0.2
        }
    ],
    "arms" : 
    [
        {
            "IO" : "io",
            "base_frame" : 
            {
                "reference_frame" : "HRSV",
                "transform" : 
                [
                    [
                        -1.0,
                        -8.6595605623549353e-17,
                        8.6595605623549366e-17,
                        0.180
                    ],
                    [
                        1.8488927466117464e-32,
                        0.70710678118654746,
                        0.70710678118654768,
                        0.40000000000000002
                    ],
                    [
                        -1.2246467991473537e-16,
                        0.70710678118654768,
                        -0.70710678118654746,
                        0.47499999999999998
                    ],
                    [
                        0.0,
                        0.0,
                        0.0,
                        1.0
                    ]
                ]
            },
            "name" : "MTML",
            "serial" : "00000",
            "type" : "MTM"
        },
        {
            "IO" : "io",
            "base_frame" : 
            {
                "reference_frame" : "HRSV",
                "transform" : 
                [
                    [
                        -1.0,
                        -8.6595605623549353e-17,
                        8.6595605623549366e-17,
                        -0.180
                    ],
                    [
                        1.8488927466117464e-32,
                        0.70710678118654746,
                        0.70710678118654768,
                        0.40000000000000002
                    ],
                    [
                        -1.2246467991473537e-16,
                        0.70710678118654768,
                        -0.70710678118654746,
                        0.47499999999999998
                    ],
                    [
                        0.0,
                        0.0,
                        0.0,
                        1.0
                    ]
                ]
            },
            "name" : "MTMR",
            "serial" : "22222",
            "type" : "MTM"
        },
        {
            "IO" : "io",
            "base_frame" : 
            {
                "component" : "SUJ",
                "interface" : "PSM1"
            },
            "name" : "PSM1",
            "serial" : "66666",
            "type" : "PSM"
        },
        {
            "IO" : "io",
            "IO_file" : "sawRobotIO1394-SUJ.json",
            "arm_file" : "suj-ECM-1-2-3.json",
            "name" : "SUJ",
            "type" : "SUJ_Classic"
        },
        {
            "IO" : "io",
            "base_frame" : 
            {
                "component" : "SUJ",
                "interface" : "PSM2"
            },
            "name" : "PSM2",
            "serial" : "88888",
            "type" : "PSM"
        },
        {
            "IO" : "io",
            "base_frame" : 
            {
                "component" : "SUJ",
                "interface" : "ECM"
            },
            "name" : "ECM",
            "serial" : "44444",
            "type" : "ECM"
        }
    ],
    "consoles" : 
    [
        {
            "HID_file" : "hid/goovis-hd.json",
            "IO_pedals" : 
            {
                "IO" : "io",
                "IO_file" : "io/sawRobotIO1394-MTML-foot-pedals-QLA1.json"
            },
            "input_type" : "PEDALS_GOOVIS_HEAD_SENSOR",
            "name" : "Console",
            "teleop_ECMs" : 
            [
                {
                    "ECM" : "ECM",
                    "MTML" : "MTML",
                    "MTMR" : "MTMR",
                    "configure_parameter" : 
                    {
                        "scale" : 0.5
                    }
                }
            ],
            "teleop_PSMs" : 
            [
                {
                    "MTM" : "MTML",
                    "PSM" : "PSM2",
                    "configure_parameter" : 
                    {
                        "scale" : 0.40000000000000002
                    }
                },
                {
                    "MTM" : "MTMR",
                    "PSM" : "PSM1",
                    "configure_parameter" : 
                    {
                        //"ignore_jaw": true,
                        "scale" : 0.40000000000000002
                    }
                }
            ]
        }
    ]
}
